# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Frequency Spectrum Analyzer

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Frequency_Spectrum_Analyzer

# Define that this driver is a signal generator without hardware communication
signal_generator: True


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
[Frequency]
label: Frequency
datatype: DOUBLE
group: Settings


[Slope]
label: Slope
datatype: DOUBLE
group: Settings
def_value: 3.5


[Signal]
label: Signal
datatype: COMPLEX
group: Inputs
def_value: 0
unit: V

[Reference]
label: Reference
datatype: COMPLEX
group: Inputs
def_value: 0
unit: V

[Output]
label: Output
datatype: COMPLEX
group: Output
def_value: 0
unit: V


