# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Single Pulse Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Single_Pulse_Generator

# Define that this driver is a signal generator without hardware communication
signal_generator: True


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
[Sampling Rate]
section: Settings
datatype: DOUBLE
def_value: 1.8e9
unit: Gs


[Sequence Type]
section: Pulse
group: Sequence
datatype: COMBO
def_value: Square Pulses
combo_def_1: Square Pulses

[Number of Pulses]
section: Pulse
group: Pulse Parameters
datatype: COMBO
def_value: 1
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4


###########################################
# Pulse Parameters: Amplitude

[Pulse 1 - Amplitude]
label: Amplitude
unit: V
section: Pulse
group: Pulse 1
datatype: DOUBLE
def_value: 1.0

[Pulse 2 - Amplitude]
label: Amplitude
unit: V
section: Pulse
group: Pulse 2
datatype: DOUBLE
def_value: 1.0
state_quant: Number of Pulses
state_value_1: 2
state_value_2: 3
state_value_3: 4

[Pulse 3 - Amplitude]
label: Amplitude
unit: V
section: Pulse
group: Pulse 3
datatype: DOUBLE
def_value: 1.0
state_quant: Number of Pulses
state_value_1: 3
state_value_2: 4

[Pulse 4 - Amplitude]
label: Amplitude
unit: V
section: Pulse
group: Pulse 4
datatype: DOUBLE
def_value: 1.0
state_quant: Number of Pulses
state_value_1: 4


###########################################
# Pulse Parameters: Length

[Pulse 1 - Length]
label: Length
unit: s
section: Pulse
group: Pulse 1
datatype: DOUBLE
def_value: 1e-6

[Pulse 2 - Length]
label: Length
unit: s
section: Pulse
group: Pulse 2
datatype: DOUBLE
def_value: 1e-6
state_quant: Number of Pulses
state_value_1: 2
state_value_2: 3
state_value_3: 4

[Pulse 3 - Length]
label: Length
unit: s
section: Pulse
group: Pulse 3
datatype: DOUBLE
def_value: 1e-6
state_quant: Number of Pulses
state_value_1: 3
state_value_2: 4

[Pulse 4 - Length]
label: Length
unit: s
section: Pulse
group: Pulse 4
datatype: DOUBLE
def_value: 1e-6
state_quant: Number of Pulses
state_value_1: 4



###########################################
# Pulses

[Trace]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True